WorkflowBuilder(Version=2.6.2)
GroupWorkflow Shader
    Bonsai.Shaders.CreateWindow
      Width=1200
      Height=1200
      VSync=On
      SwapSync=false
      ClearColor=Black
      ClearMask="DepthBufferBit ColorBufferBit"
      CursorVisible=true
      Location(X=1000, Y=200)
      WindowBorder=Resizable
      WindowState=Normal
      DisplayDevice=Primary
      TargetRenderFrequency=60
      TargetUpdateFrequency=nil
      RenderState
        StateConfiguration=Bonsai.Shaders.EnableState(Capability=Blend)
        StateConfiguration=Bonsai.Shaders.BlendFunctionState(SourceFactor=SrcAlpha, DestinationFactor=OneMinusSrcAlpha)
        StateConfiguration=Bonsai.Shaders.EnableState(Capability=PointSprite)
        StateConfiguration=Bonsai.Shaders.EnableState(Capability=ProgramPointSize)
        StateConfiguration=Bonsai.Shaders.EnableState(Capability=LineSmooth)
      GraphicsMode
        ColorFormat(Red=8, Green=8, Blue=8, Alpha=8)
        Depth=16
        Stencil=0
        Samples=0
        AccumulatorFormat(Red=0, Green=0, Blue=0, Alpha=0)
        Buffers=2
        Stereo=false
    -> Bonsai.Shaders.MeshResources
      Meshes
        MeshConfiguration=Bonsai.Shaders.TexturedQuad(Name=quad2, QuadEffects=None)
        MeshConfiguration=Bonsai.Shaders.TexturedQuad(Name=quad, QuadEffects=None)
    -> Bonsai.Shaders.TextureResources
      Textures
        TextureConfiguration=Bonsai.Shaders.Texture2D(Name=tex0, Width=nil, Height=nil, InternalFormat=Rgba, WrapS=Repeat, WrapT=Repeat, MinFilter=Linear, MagFilter=Linear)
        TextureConfiguration=Bonsai.Shaders.Texture2D(Name=tex1, Width=nil, Height=nil, InternalFormat=Rgba, WrapS=Repeat, WrapT=Repeat, MinFilter=Linear, MagFilter=Linear)
    -> Bonsai.Shaders.ShaderResources
      Shaders
        ShaderConfiguration=Bonsai.Shaders.Material
          Name=lines
          RenderState
            StateConfiguration=Bonsai.Shaders.EnableState(Capability=Blend)
            StateConfiguration=Bonsai.Shaders.BlendFunctionState(SourceFactor=SrcAlpha, DestinationFactor=OneMinusSrcAlpha)
            StateConfiguration=Bonsai.Shaders.LineWidthState(Width=3)
          ShaderUniforms(UniformConfiguration=Bonsai.Shaders.Vec4Uniform(Name=color, Value(X=1, Y=0, Z=0, W=1)))
          BufferBindings=""
          FramebufferAttachments=""
          VertexShader=shaders/lines.vert
          FragmentShader=shaders/lines.frag
          MeshName=""
        ShaderConfiguration=Bonsai.Shaders.Material
          Name=points
          RenderState=""
          ShaderUniforms(UniformConfiguration=Bonsai.Shaders.Vec4Uniform(Name=color, Value(X=1, Y=1, Z=1, W=1)))
          BufferBindings=""
          FramebufferAttachments=""
          VertexShader=shaders/particles.vert
          FragmentShader=shaders/particles.frag
          MeshName=""
        ShaderConfiguration=Bonsai.Shaders.Material
          Name=timer
          RenderState=""
          ShaderUniforms=""
          BufferBindings(BufferBinding=Bonsai.Shaders.TextureBinding(Name=tex1, TextureSlot=Texture0, TextureName=tex1, TextureTarget=Texture2D))
          FramebufferAttachments=""
          VertexShader=shaders/timer.vert
          FragmentShader=shaders/timer.frag
          MeshName=quad2
        ShaderConfiguration=Bonsai.Shaders.Material
          Name=text
          RenderState=""
          ShaderUniforms=""
          BufferBindings(BufferBinding=Bonsai.Shaders.TextureBinding(Name=tex0, TextureSlot=Texture0, TextureName=tex0, TextureTarget=Texture2D))
          FramebufferAttachments=""
          VertexShader=shaders/text.vert
          FragmentShader=shaders/text.frag
          MeshName=quad
    -> Bonsai.Resources.LoadResources

    Bonsai.Shaders.UpdateFrame
    -> PublishSubject UpdateFrame

    Bonsai.Shaders.RenderFrame
    -> PublishSubject RenderFrame

    Bonsai.Shaders.Input.MouseMove
    -> Bonsai.Shaders.Input.NormalizedDeviceCoordinates
    -> BehaviorSubject NormalizedMouseCoords

    Bonsai.Shaders.Input.MouseDown(Button=Left)
    -> PublishSubject MouseClick

    FloatProperty(Value=0.1)
    -> Bonsai.Shaders.UpdateUniform(UniformName=xscale, ShaderName=timer)

    FloatProperty(Value=-0.4)
    -> Bonsai.Shaders.UpdateUniform(UniformName=xoffset, ShaderName=timer)

    FloatProperty(Value=0.02)
    -> Bonsai.Shaders.UpdateUniform(UniformName=yscale, ShaderName=timer)

    FloatProperty(Value=0.48)
    -> Bonsai.Shaders.UpdateUniform(UniformName=yoffset, ShaderName=timer)

    BehaviorSubject<OpenCV.Net.IplImage> Texture0
    -> Bonsai.Shaders.UpdateTexture(TextureName=tex0, TextureTarget=Texture2D, InternalFormat=Rgba)

    BehaviorSubject<OpenCV.Net.IplImage> Texture1
    -> Bonsai.Shaders.UpdateTexture(TextureName=tex1, TextureTarget=Texture2D, InternalFormat=Rgba)

    PropertySource<Bonsai.Vision.Drawing.CreateCanvas,OpenCV.Net.Size>(MemberName=Size, Value(Width=1000, Height=1000))
    -> BehaviorSubject FullCanvasSize

    PropertySource<Bonsai.Vision.Drawing.CreateCanvas,OpenCV.Net.Size>(MemberName=Size, Value(Width=200, Height=40))
    -> BehaviorSubject TimerCanvasSize

GroupWorkflow TabDown
    Bonsai.Windows.Input.KeyDown(Filter=Tab, SuppressRepetitions=false)
    -> Disable PublishSubject TabDown
    -> BehaviorSubject TabDown

GroupWorkflow RandomDistributions
    Bonsai.Numerics.CreateRandom(Seed=nil)
    -> Bonsai.Numerics.Distributions.CreateContinuousUniform(Lower=-1, Upper=1)
    -> BehaviorSubject RandomPointDistribution

    Bonsai.Numerics.CreateRandom(Seed=nil)
    -> Bonsai.Numerics.Distributions.CreateContinuousUniform(Lower=0, Upper=1)
    -> BehaviorSubject RandomCoherencyDistribution

    Bonsai.Numerics.CreateRandom(Seed=nil)
    -> Bonsai.Numerics.Distributions.CreateContinuousUniform(Lower=0, Upper=0.01)
    -> BehaviorSubject RandomStepDistribution

    Bonsai.Numerics.CreateRandom(Seed=nil)
    -> Bonsai.Numerics.Distributions.CreateContinuousUniform(Lower=-3.14159265359, Upper=3.14159265359)
    -> BehaviorSubject RandomDirectionDistribution

GroupWorkflow InitializeData
    IntProperty(Value=550)
    -> BehaviorSubject NumPoints

    FloatProperty(Value=0.5)
    -> BehaviorSubject ProportionCoherent

    FloatProperty(Value=0.001)
    -> BehaviorSubject Step

    FloatProperty(Value=45)
    -> BonZeb.ConvertDegreesToRadians
    -> BehaviorSubject Direction

    SubscribeSubject NumPoints => #9
    SubscribeSubject ProportionCoherent => #10
    #9, #10 -> CombineLatest
    -> Bonsai.Scripting.ExpressionTransform
      Expression: it.Item2 > 0 ? Convert.ToInt32(Math.Round(it.Item1*(it.Item2))) : 0
    -> BehaviorSubject NumCoherent

    SubscribeSubject NumPoints => #14
    SubscribeSubject ProportionCoherent => #15
    #14, #15 -> CombineLatest
    -> Bonsai.Scripting.ExpressionTransform
      Expression: it.Item2 < 1 ? Convert.ToInt32(Math.Round(it.Item1*(1 - it.Item2))) : 0
    -> BehaviorSubject NumIncoherent

    FloatProperty(Value=0)
    -> BehaviorSubject TrialTime

    BooleanProperty(Value=false)
    -> PublishSubject TrialComplete

    PublishSubject<OpenTK.Vector3[]> PointArray
    PublishSubject<OpenTK.Vector2[]> LineArray

    IntProperty(Value=0)
    -> BehaviorSubject TrialNum

    BehaviorSubject<System.Tuple(System.Double,System.Double)> TrialChoice

    TimeSpanProperty(Value=PT0S)
    -> PublishSubject ReactionTime

    TimeSpanProperty(Value=PT0S)
    -> BehaviorSubject ReactionTimer

GroupWorkflow CalculateFrameRate
    Timer(DueTime=PT0S, Period=PT1S) => #0
    BooleanProperty(Value=false) => #1
    #0, #1 -> WithLatestFrom => #2
    SubscribeSubject UpdateFrame
    -> IntProperty(Value=1) => #4
    #4, #2 -> WithLatestFrom
    -> Scan
        WorkflowInput Source1 => #0
        -> MemberSelector(Selector=Accumulation) => #1
        #0 -> MemberSelector(Selector=Value) => #2
        #1, #2 -> Zip => #3
        -> Bonsai.Scripting.ExpressionTransform => #4
          Expression: it.Item1.Item2.Item2 ? 0 : it.Item1.Item1 + it.Item2.Item1
        #3 -> Bonsai.Scripting.ExpressionTransform => #5
          Expression: it.Item2.Item2.Item1 != it.Item1.Item2.item1 ? true : false
        #2 -> MemberSelector(Selector=Item2.Item1) => #6
        #6, #5 -> Zip => #7
        #4, #7 -> Zip
        -> WorkflowOutput
    -> Scan
        WorkflowInput Source1 => #0
        -> MemberSelector(Selector=Accumulation) => #1
        #0 -> MemberSelector(Selector=Value) => #2
        #1, #2 -> Zip
        -> Bonsai.Scripting.ExpressionTransform
          Expression: it.Item2.Item2.Item2 ? it.Item2 : it.Item1
        -> WorkflowOutput
    -> Condition => #8
        WorkflowInput Source1
        -> MemberSelector(Selector=Item2.Item1) => #1
        -> Skip(Count=1) => #2
        #2, #1 -> Zip
        -> Bonsai.Scripting.ExpressionTransform
          Expression: it.Item1 != it.Item2
        -> WorkflowOutput
    Source2=#8 -> MemberSelector(Selector=Item1)
    -> WorkflowOutput

GroupWorkflow FileDescription
    ExternalizedMapping(Value(DisplayName=1.PathToFolder))
    -> StringProperty(Value=data) => #1
    -> Condition => #2
        WorkflowInput Source1
        -> Bonsai.Scripting.ExpressionTransform
          Expression: it.Length == 0 || it.EndsWith("/") || it.EndsWith("\\")
        -> WorkflowOutput
    #1 -> Condition
        WorkflowInput Source1
        -> Bonsai.Scripting.ExpressionTransform
          Expression: it.Length != 0 && (!it.EndsWith("/") || !it.EndsWith("\\"))
        -> WorkflowOutput
    -> Add(Operand=StringProperty(Value=/)) => #4
    #2, #4 -> Merge => #5
    ExternalizedMapping(Value(DisplayName=2.Filename))
    -> StringProperty(Value=NICHOLAS-GUILBEAULT) => #7
    -> Condition => #8
        WorkflowInput Source1
        -> Bonsai.Scripting.ExpressionTransform
          Expression: it.Length == 0 || it.EndsWith("_")
        -> WorkflowOutput
    #7 -> Condition
        WorkflowInput Source1
        -> Bonsai.Scripting.ExpressionTransform
          Expression: it.Length != 0 && !it.EndsWith("_")
        -> WorkflowOutput
    -> Add(Operand=StringProperty(Value=_)) => #10
    #8, #10 -> Merge => #11
    ExternalizedMapping(Value(DisplayName=3.OverwriteFiles))
    -> BooleanProperty(Value=false) => #13
    ExternalizedMapping(Value(DisplayName=4.CreateNewFolderUsingDate))
    -> BooleanProperty(Value=false) => #15
    -> Condition
        WorkflowInput Source1
        -> Equal(Operand=BooleanProperty(Value=true))
        -> WorkflowOutput
    -> Timestamp
    -> MemberSelector(Selector=Timestamp.DateTime.Date) => #18
    -> MemberSelector(Selector=Year)
    -> Bonsai.Scripting.ExpressionTransform => #20
      Expression: it.ToString()
    #18 -> MemberSelector(Selector=Month)
    -> Bonsai.Scripting.ExpressionTransform => #22
      Expression: it < 10 ? "0" + it.ToString() : it.ToString()
    #18 -> MemberSelector(Selector=Day)
    -> Bonsai.Scripting.ExpressionTransform => #24
      Expression: it < 10 ? "0" + it.ToString() : it.ToString()
    #20, #22, #24 -> CombineLatest
    -> Bonsai.Scripting.ExpressionTransform => #26
      Expression: it.Item1 + "-" + it.Item2 + "-" + it.Item3 + "/"
    #15 -> Condition
        WorkflowInput Source1
        -> Equal(Operand=BooleanProperty(Value=false))
        -> WorkflowOutput
    -> StringProperty(Value="") => #28
    #26, #28 -> Merge => #29
    #5, #29 -> CombineLatest
    -> Add => #31
    ExternalizedMapping(Value(DisplayName=5.TimestampDataFiles))
    -> BooleanProperty(Value=true) => #33
    #31, #11, #13, #33 -> CombineLatest => #34
    -> MemberSelector(Selector=Item1)
    -> ReplaySubject Folder(BufferSize=nil)
    #34 -> MemberSelector(Selector=Item2)
    -> ReplaySubject BaseFilename(BufferSize=nil)
    #34 -> MemberSelector(Selector=Item3)
    -> ReplaySubject OverwriteExistingFiles(BufferSize=nil)
    #34 -> MemberSelector(Selector=Item4)
    -> ReplaySubject TimestampDataFiles(BufferSize=nil)

CreateObservable StartScreen
    SubscribeSubject UpdateFrame => #0
    SubscribeSubject FullCanvasSize => #1
    -> PropertyMapping(Size) => #2
    #0, #2 -> Bonsai.Vision.Drawing.CreateCanvas(Size(Width=1000, Height=1000), Depth=U8, Channels=3, Color(Val0=0, Val1=0, Val2=0, Val3=0)) => #3
    #1 -> Bonsai.Scripting.ExpressionTransform
      Expression: new (it.Width / 2 as X, it.Height / 2 as Y)
    -> PropertyMapping(Origin(Selector="X,Y")) => #5
    #3, #5 -> Bonsai.Vision.Drawing.AddText
      Text="Press Tab to Start"
      Alignment=Center
      LineAlignment=Center
      TextRenderingHint=AntiAlias
      Color(Val0=255, Val1=255, Val2=255, Val3=255)
      Font="Microsoft Sans Serif, 22pt"
      Origin(X=500, Y=500)
    -> Bonsai.Vision.Drawing.DrawCanvas
    -> Bonsai.Vision.Flip(Mode=Vertical)
    -> MulticastSubject Texture0
    -> WorkflowOutput
-> GroupWorkflow ExitStartScreen
    SubscribeSubject TabDown => #0
    WorkflowInput Source1
    -> Concat => #2
    #2, #0 -> TakeUntil
    -> TakeLast(Count=1)
    -> WorkflowOutput
-> SelectMany ClearScreen
    SubscribeSubject UpdateFrame => #0
    SubscribeSubject FullCanvasSize
    -> PropertyMapping(Size) => #2
    #0, #2 -> Bonsai.Vision.Drawing.CreateCanvas(Size(Width=1000, Height=1000), Depth=U8, Channels=3, Color(Val0=0, Val1=0, Val2=0, Val3=0))
    -> Bonsai.Vision.Drawing.DrawCanvas
    -> MulticastSubject Texture0

CreateObservable RandomDots
    SubscribeSubject RandomCoherencyDistribution
    -> Bonsai.Numerics.Distributions.Sample
    -> MulticastSubject ProportionCoherent

    SubscribeSubject RandomStepDistribution
    -> Bonsai.Numerics.Distributions.Sample
    -> MulticastSubject Step

    SubscribeSubject RandomDirectionDistribution
    -> Bonsai.Numerics.Distributions.Sample
    -> MulticastSubject Direction

    Bonsai.Shaders.CreateVector2(X=0, Y=0) => #9
    SubscribeSubject NormalizedMouseCoords => #10
    #10, #9 -> WithLatestFrom
    -> SelectMany CreateLinesArray
        WorkflowInput Source1 => #0
        -> Bonsai.Scripting.ExpressionTransform => #1
          Expression: it.Item1
        #0 -> Bonsai.Scripting.ExpressionTransform => #2
          Expression: it.Item2
        #1, #2 -> Merge
        -> ToArray
        -> WorkflowOutput
    -> MulticastSubject LineArray

    SubscribeSubject UpdateFrame => #14
    SubscribeSubject PointArray => #15
    #14, #15 -> WithLatestFrom
    -> MemberSelector(Selector=Item2)
    -> SelectMany UpdatePointArray
        SubscribeSubject NumPoints
        -> Take(Count=1)
        -> SelectMany CreateArray
            WorkflowInput Source1
            -> PropertyMapping(Count)
            -> Range(Start=0, Count=550)
            -> ToArray
            -> WorkflowOutput
        -> Bonsai.Numerics.SelectPermutation => #3
        SubscribeSubject NumCoherent
        -> Take(Count=1) => #5
        SubscribeSubject Step
        -> Take(Count=1) => #7
        SubscribeSubject Direction
        -> Take(Count=1) => #9
        SubscribeSubject NumIncoherent
        -> Take(Count=1) => #11
        SubscribeSubject RandomPointDistribution
        -> Take(Count=1) => #13
        WorkflowInput Source1 => #14
        #14, #5, #11, #7, #9, #13 -> CombineLatest => #15
        #3, #15 -> WithLatestFrom
        -> Bonsai.Scripting.PythonTransform
          Script:
            import clr
            clr.AddReference('OpenTK')
            from OpenTK import Vector3
            from math import cos, sin, radians
            from System import Array

            @returns(Array[Vector3])
            def process(it):

              num_points = it.Item1
              point_array = it.Item2.Item1
              num_coherent = it.Item2.Item2
              num_incoherent = it.Item2.Item3

              step = it.Item2.Item4
              direction = it.Item2.Item5

              random_point = it.Item2.Item6

              xvals = []
              yvals = []
              zvals = []

            #  for i in range(num_incoherent):

            #    ival = num_points[i + num_coherent]

            #    xval = point_array[ival].X
            #    yval = point_array[ival].Y
            #    zval = point_array[ival].Z

            #    xvals.append(xval)
            #    yvals.append(yval)
            #    zvals.append(zval)

              for i in range(num_coherent):

                ival = num_points[i]

                xval = point_array[ival].X
                yval = point_array[ival].Y
                zval = point_array[ival].Z

                xnew = xval + (step * cos(direction) * (zval / 10))
                ynew = yval + (step * sin(direction) * (zval / 10))

                if xnew > 1:
                  xnew -= 2
                if xnew < -1:
                  xnew += 2

                if ynew > 1:
                  ynew -= 2
                if ynew < -1:
                  ynew += 2

                xvals.append(xnew)
                yvals.append(ynew)
                zvals.append(zval)

              for i in range(num_incoherent):

                ival = num_points[i + num_coherent]

                xval = point_array[ival].X
                yval = point_array[ival].Y
                zval = point_array[ival].Z

            #    xvals.append(xval)
            #    yvals.append(yval)
            #    zvals.append(zval)

                xnew = random_point.Sample()
                ynew = random_point.Sample()
                znew = abs(random_point.Sample()) * 20 + 1

                if xnew > 1:
                  xnew -= 2
                if xnew < -1:
                  xnew += 2

                if ynew > 1:
                  ynew -= 2
                if ynew < -1:
                  ynew += 2

                xvals.append(xnew)
                yvals.append(ynew)
                zvals.append(znew)

              output = [Vector3(x, y, z) for x, y, z in zip(xvals, yvals, zvals)]

              return Array[Vector3](output)
        -> WorkflowOutput
    -> MulticastSubject PointArray

    SubscribeSubject TrialTime
    -> Bonsai.Scripting.ExpressionTransform
      Expression: it.ToString("F")
    -> PropertyMapping(Text) => #22
    SubscribeSubject TrialTime => #23
    SubscribeSubject RenderFrame => #24
    SubscribeSubject TrialNum
    -> Bonsai.Scripting.ExpressionTransform
      Expression: it.ToString("D3")
    -> PropertyMapping(Text) => #27
    SubscribeSubject TrialDuration
    -> Bonsai.Scripting.ExpressionTransform
      Expression: it.TotalSeconds / 3
    -> PropertyMapping(Value) => #30
    #23, #30 -> SelectMany ColorWarning
        WorkflowInput Source1 => #0
        ExternalizedMapping(Value) => #1
        #0, #1 -> Condition
            WorkflowInput Source1 => #0
            ExternalizedMapping(Value) => #1
            #0, #1 -> GreaterThan(Operand=DoubleProperty(Value=1))
            -> WorkflowOutput
        -> Bonsai.Shaders.CreateVector4(X=255, Y=255, Z=255, W=255) => #3
        #0, #1 -> Condition
            WorkflowInput Source1 => #0
            ExternalizedMapping(Value) => #1
            #0, #1 -> LessThanOrEqual(Operand=DoubleProperty(Value=1))
            -> WorkflowOutput
        -> Multiply(Operand=DoubleProperty(Value=10))
        -> Bonsai.Scripting.ExpressionTransform
          Expression: Convert.ToInt32(it)
        -> Mod(Operand=DoubleProperty(Value=2)) => #7
        -> Condition
            WorkflowInput Source1
            -> Equal(Operand=DoubleProperty(Value=0))
            -> WorkflowOutput
        -> Bonsai.Shaders.CreateVector4(X=0, Y=0, Z=255, W=255) => #9
        #7 -> Condition
            WorkflowInput Source1
            -> Equal(Operand=DoubleProperty(Value=1))
            -> WorkflowOutput
        -> Bonsai.Shaders.CreateVector4(X=255, Y=255, Z=255, W=255) => #11
        #9, #11 -> Merge => #12
        #3, #12 -> Merge
        -> WorkflowOutput
    -> PropertyMapping(Color(Selector="X,Y,Z,W")) => #32
    SubscribeSubject TimerCanvasSize => #33
    -> PropertyMapping(Size) => #34
    #24, #34 -> Bonsai.Vision.Drawing.CreateCanvas(Size(Width=200, Height=40), Depth=U8, Channels=3, Color(Val0=0, Val1=0, Val2=0, Val3=0)) => #35
    #33 -> Bonsai.Scripting.ExpressionTransform
      Expression: new (5 as X, it.Height / 2 as Y)
    -> PropertyMapping(Origin(Selector="X,Y")) => #37
    #35, #37, #22, #32 -> Bonsai.Vision.Drawing.AddText => #38
      Text=1.42
      Alignment=Near
      LineAlignment=Center
      TextRenderingHint=AntiAlias
      Color(Val0=255, Val1=255, Val2=255, Val3=255)
      Font="Microsoft Sans Serif, 14pt"
      Origin(X=5, Y=20)
    #33 -> Bonsai.Scripting.ExpressionTransform
      Expression: new (it.Width - 5 as X, it.Height / 2 as Y)
    -> PropertyMapping(Origin(Selector="X,Y")) => #40
    #38, #40, #27 -> Bonsai.Vision.Drawing.AddText
      Text=009
      Alignment=Far
      LineAlignment=Center
      TextRenderingHint=AntiAlias
      Color(Val0=0, Val1=255, Val2=0, Val3=255)
      Font="Microsoft Sans Serif, 14pt"
      Origin(X=195, Y=20)
    -> Bonsai.Vision.Drawing.DrawCanvas
    -> Bonsai.Vision.Flip(Mode=Vertical)
    -> MulticastSubject Texture1

    SubscribeSubject RenderFrame
    -> Timestamp
    -> MemberSelector(Selector=Timestamp) => #47
    -> Take(Count=1) => #48
    #47, #48 -> WithLatestFrom
    -> Subtract
    -> MulticastSubject ReactionTimer => #51
    ExternalizedMapping(Value(DisplayName=TrialDuration))
    -> TimeSpanProperty(Value=PT3S)
    -> BehaviorSubject TrialDuration => #54
    #51, #54 -> WithLatestFrom
    -> Bonsai.Scripting.ExpressionTransform
      Expression: (it.Item2 - it.Item1).TotalSeconds
    -> MulticastSubject TrialTime
    -> Condition
        WorkflowInput Source1
        -> LessThanOrEqual(Operand=DoubleProperty(Value=0))
        -> WorkflowOutput
    -> Take(Count=1)
    -> FloatProperty(Value=0)
    -> MulticastSubject TrialTime => #61
    -> DoubleProperty(Value=0) => #62
    #61 -> DoubleProperty(Value=0) => #63
    #62, #63 -> Zip
    -> MulticastSubject TrialChoice => #65
    SubscribeSubject TrialDuration
    -> PropertyMapping(Value) => #67
    #65, #67 -> TimeSpanProperty(Value=PT3S)
    -> MulticastSubject ReactionTime
    -> BooleanProperty(Value=false)
    -> MulticastSubject TrialComplete

    SubscribeSubject NormalizedMouseCoords
    -> Bonsai.Scripting.ExpressionTransform => #73
      Expression: Math.Atan2(it.Y, it.X)
    SubscribeSubject NormalizedMouseCoords
    -> Bonsai.Scripting.ExpressionTransform => #75
      Expression: Math.Sqrt(Math.Pow(it.Y, 2) + Math.Pow(it.X, 2))
    #73, #75 -> Zip => #76
    SubscribeSubject MouseClick => #77
    SubscribeSubject TrialTime
    -> Skip(Count=1) => #79
    SubscribeSubject TrialDuration => #80
    #79, #80 -> WithLatestFrom
    -> Condition
        WorkflowInput Source1
        -> Bonsai.Scripting.ExpressionTransform
          Expression: it.Item1 < it.Item2.TotalSeconds - 0.5
        -> WorkflowOutput
    -> Take(Count=1) => #83
    #77, #83 -> SkipUntil => #84
    SubscribeSubject ReactionTimer => #85
    #76, #85 -> WithLatestFrom => #86
    #84, #86 -> WithLatestFrom => #87
    -> MemberSelector(Selector=Item2.Item1)
    -> MulticastSubject TrialChoice
    #87 -> MemberSelector(Selector=Item2.Item2)
    -> MulticastSubject ReactionTime
    #87 -> BooleanProperty(Value=true)
    -> MulticastSubject TrialComplete

    CreateObservable GetRandomPointDistribution
        SubscribeSubject RandomPointDistribution => #0
        SubscribeSubject NumPoints
        -> PropertyMapping(Count) => #2
        #0, #2 -> Bonsai.Numerics.Distributions.SampleArray(Count=550) => #3
        SubscribeSubject NumPoints
        -> PropertyMapping(Count) => #5
        #0, #5 -> Bonsai.Numerics.Distributions.SampleArray(Count=550) => #6
        SubscribeSubject NumPoints
        -> PropertyMapping(Count) => #8
        #0, #8 -> Bonsai.Numerics.Distributions.SampleArray(Count=550) => #9
        #3, #6, #9 -> Zip
        -> WorkflowOutput
    -> Merge
    -> SelectMany CreatePointArray
        WorkflowInput Source1 => #0
        -> MemberSelector(Selector=Item1)
        -> Concat => #2
        #0 -> MemberSelector(Selector=Item2)
        -> Concat => #4
        #0 -> MemberSelector(Selector=Item3)
        -> Concat
        -> Bonsai.Numerics.Abs
        -> Multiply(Operand=DoubleProperty(Value=20))
        -> Add(Operand=DoubleProperty(Value=1)) => #9
        #2, #4, #9 -> Zip
        -> InputMapping(X(Selector=Item1), Y(Selector=Item2), Z(Selector=Item3))
        -> Bonsai.Shaders.CreateVector3(X=-0.702441633, Y=0.273202032, Z=20.8179016)
        -> ToArray
        -> WorkflowOutput
    -> MulticastSubject PointArray

    SubscribeSubject TrialComplete
    -> WorkflowOutput
-> Merge
-> Take(Count=1)
-> SelectMany UpdateTrialNum
    WorkflowInput Source1
    -> IntProperty(Value=1) => #1
    SubscribeSubject TrialNum => #2
    #1, #2 -> WithLatestFrom
    -> Add
    -> MulticastSubject TrialNum
    -> WorkflowOutput
-> GroupWorkflow InitiateExperiment
    SubscribeSubject TabDown => #0
    WorkflowInput Source1 => #1
    #1, #0 -> SubscribeWhen
    -> WorkflowOutput
-> Repeat
-> GroupWorkflow StopExperiment
    WorkflowInput Source1 => #0
    SubscribeSubject TrialNum => #1
    ExternalizedMapping(TrialNum) => #2
    #1, #2 -> Condition
        WorkflowInput Source1 => #0
        ExternalizedMapping(Value(DisplayName=TrialNum)) => #1
        #0, #1 -> Equal(Operand=IntProperty(Value=10))
        -> WorkflowOutput
    -> Take(Count=1) => #4
    IntProperty(Value=0) => #5
    #0, #5 -> Merge => #6
    #6, #4 -> TakeUntil
    -> TakeLast(Count=1)
    -> IntProperty(Value=0)
    -> BehaviorSubject EndScreen
    -> WorkflowOutput

CreateObservable ExperimentVariables
    SubscribeSubject RenderFrame => #0
    SubscribeSubject PointArray => #1
    #0, #1 -> WithLatestFrom
    -> MemberSelector(Selector=Item2)
    -> Bonsai.Shaders.DrawArrays(ShaderName=points, DrawMode=Points, Usage=DynamicDraw, VertexAttributes(VertexAttributeMapping(Size=3, Normalized=false, Type=Float)))

    SubscribeSubject RenderFrame => #5
    SubscribeSubject LineArray => #6
    #5, #6 -> WithLatestFrom
    -> MemberSelector(Selector=Item2)
    -> Bonsai.Shaders.DrawArrays(ShaderName=lines, DrawMode=Lines, Usage=DynamicDraw, VertexAttributes(VertexAttributeMapping(Size=2, Normalized=false, Type=Float)))

    GroupWorkflow "Generate Timestamp"
        SubscribeSubject TimestampDataFiles => #0
        -> Condition
            WorkflowInput Source1
            -> Equal(Operand=BooleanProperty(Value=true))
            -> WorkflowOutput
        -> Timestamp
        -> MemberSelector(Selector=Timestamp.DateTime) => #3
        -> MemberSelector(Selector=Year)
        -> Bonsai.Scripting.ExpressionTransform => #5
          Expression: it.ToString()
        #3 -> MemberSelector(Selector=Month)
        -> Bonsai.Scripting.ExpressionTransform => #7
          Expression: it > 9 ? it.ToString() : String.Format("0{0}", it.ToString())
        #3 -> MemberSelector(Selector=Day)
        -> Bonsai.Scripting.ExpressionTransform => #9
          Expression: it > 9 ? it.ToString() : String.Format("0{0}", it.ToString())
        #3 -> MemberSelector(Selector=Hour)
        -> Bonsai.Scripting.ExpressionTransform => #11
          Expression: it > 9 ? it.ToString() : String.Format("0{0}", it.ToString())
        #3 -> MemberSelector(Selector=Minute)
        -> Bonsai.Scripting.ExpressionTransform => #13
          Expression: it > 9 ? it.ToString() : String.Format("0{0}", it.ToString())
        #3 -> MemberSelector(Selector=Second)
        -> Bonsai.Scripting.ExpressionTransform => #15
          Expression: it > 9 ? it.ToString() : String.Format("0{0}", it.ToString())
        #3 -> StringProperty(Value=_TIME-{0}-{1}-{2}_) => #16
        #16, #11, #13, #15 -> Zip
        -> Bonsai.Scripting.ExpressionTransform => #18
          Expression: String.Format(it.Item1, it.Item2, it.Item3, it.Item4)
        #3 -> StringProperty(Value=DATE-{0}-{1}-{2}) => #19
        #19, #5, #7, #9 -> Zip
        -> Bonsai.Scripting.ExpressionTransform => #21
          Expression: String.Format(it.Item1, it.Item2, it.Item3, it.Item4)
        #21, #18 -> Zip
        -> Add => #23
        #0 -> Condition
            WorkflowInput Source1
            -> Equal(Operand=BooleanProperty(Value=false))
            -> WorkflowOutput
        -> StringProperty(Value="") => #25
        #23, #25 -> Merge
        -> BehaviorSubject TimestampPrefix
        -> WorkflowOutput

    ExternalizedMapping(Value(DisplayName=SaveData))
    -> BooleanProperty(Value=true)
    -> Condition
        WorkflowInput Source1
        -> Equal(Operand=BooleanProperty(Value=true))
        -> WorkflowOutput
    -> SelectMany SaveData
        SubscribeSubject Folder => #0
        SubscribeSubject TimestampPrefix => #1
        SubscribeSubject BaseFilename
        -> Add(Operand=StringProperty(Value=data.csv)) => #3
        #0, #1, #3 -> CombineLatest
        -> Add
        -> PropertyMapping(FileName) => #6
        SubscribeSubject OverwriteExistingFiles
        -> PropertyMapping(Overwrite) => #8
        SubscribeSubject TrialNum
        -> Skip(Count=1) => #10
        SubscribeSubject TrialChoice
        -> MemberSelector(Selector=Item1) => #12
        SubscribeSubject TrialChoice
        -> MemberSelector(Selector=Item2) => #14
        SubscribeSubject ProportionCoherent => #15
        SubscribeSubject Step => #16
        SubscribeSubject Direction => #17
        SubscribeSubject TrialComplete => #18
        SubscribeSubject ReactionTime
        -> Bonsai.Scripting.ExpressionTransform => #20
          Expression: it.TotalSeconds
        SubscribeSubject TrialComplete => #21
        SubscribeSubject Direction => #22
        #12, #21, #22 -> Zip
        -> Bonsai.Scripting.ExpressionTransform => #24
          Expression: it.Item2 ? it.Item1 : it.Item3 + (Math.Pi * 2)
        #24, #14, #15, #17, #16, #20, #18 -> Zip => #25
        #10, #25 -> Zip
        -> Bonsai.Scripting.ExpressionTransform => #27
          Expression:
            new(
              it.Item1 as TrialNum,
              it.Item2.Item1 as ChoiceDirection,
              it.Item2.Item2 as ChoiceMagnitude,
              it.Item2.Item3 as ProportionCoherent,
              it.Item2.Item4 as Direction,
              it.Item2.Item5 as Magnitude,
              it.Item2.Item6 as ReactionTime,
              it.Item2.Item7 as Response
            )
        #27, #6, #8 -> Bonsai.IO.CsvWriter(FileName=data/DATE-2022-04-22_TIME-12-29-08_NICHOLAS-GUILBEAULT_data.csv, Append=false, Overwrite=false, Suffix=None, IncludeHeader=true)
-> GroupWorkflow InitiateExperimentVariables
    SubscribeSubject TabDown => #0
    WorkflowInput Source1
    -> Concat => #2
    #2, #0 -> SubscribeWhen
    -> WorkflowOutput
-> GroupWorkflow StopExperiment
    WorkflowInput Source1 => #0
    SubscribeSubject TrialNum => #1
    ExternalizedMapping(TrialNum) => #2
    #1, #2 -> Condition
        WorkflowInput Source1 => #0
        ExternalizedMapping(Value(DisplayName=TrialNum)) => #1
        #0, #1 -> Equal(Operand=IntProperty(Value=10))
        -> WorkflowOutput
    -> Take(Count=1) => #4
    #0, #4 -> TakeUntil
    -> WorkflowOutput

CreateObservable EndScreen
    Bonsai.Shaders.CreateVector3(X=0, Y=0, Z=0)
    -> ToArray
    -> MulticastSubject PointArray

    Bonsai.Shaders.CreateVector2(X=0, Y=0)
    -> ToArray
    -> MulticastSubject LineArray

    SubscribeSubject UpdateFrame => #6
    SubscribeSubject FullCanvasSize => #7
    -> PropertyMapping(Size) => #8
    #6, #8 -> Bonsai.Vision.Drawing.CreateCanvas(Size(Width=1000, Height=1000), Depth=U8, Channels=3, Color(Val0=0, Val1=0, Val2=0, Val3=0)) => #9
    #7 -> Bonsai.Scripting.ExpressionTransform
      Expression: new (it.Width / 2 as X, it.Height / 2 as Y)
    -> PropertyMapping(Origin(Selector="X,Y")) => #11
    #9, #11 -> Bonsai.Vision.Drawing.AddText
      Text="Thanks for playing!"
      Alignment=Center
      LineAlignment=Center
      TextRenderingHint=AntiAlias
      Color(Val0=255, Val1=255, Val2=255, Val3=255)
      Font="Microsoft Sans Serif, 22pt"
      Origin(X=500, Y=500)
    -> Bonsai.Vision.Drawing.DrawCanvas
    -> Bonsai.Vision.Flip(Mode=Vertical)
    -> MulticastSubject Texture0
    -> Bonsai.Shaders.DrawMeshAggregate(ShaderName=text, MeshNames(MeshName=quad2, MeshName(Divisor=1, quad)))

    SubscribeSubject UpdateFrame => #17
    SubscribeSubject TimerCanvasSize
    -> PropertyMapping(Size) => #19
    #17, #19 -> Bonsai.Vision.Drawing.CreateCanvas(Size(Width=200, Height=40), Depth=U8, Channels=3, Color(Val0=0, Val1=0, Val2=0, Val3=0))
    -> Bonsai.Vision.Drawing.DrawCanvas
    -> MulticastSubject Texture1
-> GroupWorkflow ExitStartScreen
    WorkflowInput Source1
    -> Concat => #1
    SubscribeSubject EndScreen
    -> Take(Count=1) => #3
    #1, #3 -> SubscribeWhen
    -> WorkflowOutput
