<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.6.2"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:num="clr-namespace:Bonsai.Numerics;assembly=Bonsai.Numerics"
                 xmlns:p1="clr-namespace:Bonsai.Numerics.Distributions;assembly=Bonsai.Numerics"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:gl="clr-namespace:Bonsai.Shaders;assembly=Bonsai.Shaders"
                 xmlns:bz="clr-namespace:BonZeb;assembly=BonZeb"
                 xmlns:scr="clr-namespace:Bonsai.Scripting;assembly=Bonsai.Scripting"
                 xmlns:p2="clr-namespace:OpenTK;assembly=OpenTK"
                 xmlns:dsp="clr-namespace:Bonsai.Dsp;assembly=Bonsai.Dsp"
                 xmlns:res="clr-namespace:Bonsai.Resources;assembly=Bonsai.System"
                 xmlns:gli="clr-namespace:Bonsai.Shaders.Input;assembly=Bonsai.Shaders"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="num:CreateRandom">
          <num:Seed xsi:nil="true" />
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="p1:CreateContinuousUniform">
          <p1:Lower>-1</p1:Lower>
          <p1:Upper>1</p1:Upper>
        </Combinator>
      </Expression>
      <Expression xsi:type="BehaviorSubject">
        <Name>RandomDistribution</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="IntProperty">
          <Value>550</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="BehaviorSubject">
        <Name>NumPoints</Name>
      </Expression>
      <Expression xsi:type="SelectMany">
        <Name>GetRandomDistribution</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>RandomDistribution</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>NumPoints</Name>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Count" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p1:SampleArray">
                <p1:Count>550</p1:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>NumPoints</Name>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Count" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p1:SampleArray">
                <p1:Count>550</p1:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>NumPoints</Name>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Count" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p1:SampleArray">
                <p1:Count>550</p1:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="3" Label="Source1" />
            <Edge From="0" To="6" Label="Source1" />
            <Edge From="0" To="9" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source2" />
            <Edge From="3" To="10" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source2" />
            <Edge From="6" To="10" Label="Source2" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="9" Label="Source2" />
            <Edge From="9" To="10" Label="Source3" />
            <Edge From="10" To="11" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="SelectMany">
        <Name>CreatePointArray</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Item1</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Concat" />
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Item2</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Concat" />
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Item3</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Concat" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="num:Abs" />
            </Expression>
            <Expression xsi:type="Multiply">
              <Operand xsi:type="DoubleProperty">
                <Value>20</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="Add">
              <Operand xsi:type="DoubleProperty">
                <Value>1</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="InputMapping">
              <PropertyMappings>
                <Property Name="X" Selector="Item1" />
                <Property Name="Y" Selector="Item2" />
                <Property Name="Z" Selector="Item3" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:CreateVector3">
                <gl:X>0.6898602</gl:X>
                <gl:Y>0.886510849</gl:Y>
                <gl:Z>16.4452534</gl:Z>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:ToArray" />
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="0" To="3" Label="Source1" />
            <Edge From="0" To="5" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="10" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="10" Label="Source2" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="10" Label="Source3" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="11" To="12" Label="Source1" />
            <Edge From="12" To="13" Label="Source1" />
            <Edge From="13" To="14" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="MulticastSubject">
        <Name>PointArray</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="FloatProperty">
          <Value>0.5</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="BehaviorSubject">
        <Name>ProportionCoherent</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="FloatProperty">
          <Value>0.002</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="BehaviorSubject">
        <Name>Step</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="FloatProperty">
          <Value>45</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="bz:ConvertDegreesToRadians" />
      </Expression>
      <Expression xsi:type="BehaviorSubject">
        <Name>Direction</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>NumPoints</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>ProportionCoherent</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:CombineLatest" />
      </Expression>
      <Expression xsi:type="scr:ExpressionTransform">
        <scr:Expression>it.Item2 &gt; 0 ? Convert.ToInt32(Math.Round(it.Item1*(it.Item2))) : 0</scr:Expression>
      </Expression>
      <Expression xsi:type="BehaviorSubject">
        <Name>NumCoherent</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>NumPoints</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>ProportionCoherent</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:CombineLatest" />
      </Expression>
      <Expression xsi:type="scr:ExpressionTransform">
        <scr:Expression>it.Item2 &lt; 1 ? Convert.ToInt32(Math.Round(it.Item1*(1 - it.Item2))) : 0</scr:Expression>
      </Expression>
      <Expression xsi:type="BehaviorSubject">
        <Name>NumIncoherent</Name>
      </Expression>
      <Expression xsi:type="BehaviorSubject" TypeArguments="p2:Vector3[]">
        <Name>PointArray</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>RenderFrame</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Skip">
          <rx:Count>1</rx:Count>
        </Combinator>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="rx:ElementCountWindow">
            <rx:Count>1</rx:Count>
            <rx:Skip>10</rx:Skip>
          </Combinator>
        </Builder>
      </Expression>
      <Expression xsi:type="SelectMany">
        <Name>UpdatePointArray</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>NumPoints</Name>
            </Expression>
            <Expression xsi:type="SelectMany">
              <Name>CreateArray</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="Count" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Range">
                      <rx:Start>0</rx:Start>
                      <rx:Count>550</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:ToArray" />
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="num:SelectPermutation" />
            </Expression>
            <Expression xsi:type="SelectMany">
              <Name>SampleArray</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>NumCoherent</Name>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="Count" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Range">
                      <rx:Start>0</rx:Start>
                      <rx:Count>275</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:CombineLatest" />
                  </Expression>
                  <Expression xsi:type="Index" />
                  <Expression xsi:type="SelectMany">
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:ToArray" />
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="4" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source2" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="6" To="7" Label="Source1" />
                  <Edge From="7" To="8" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="SelectMany">
              <Name>SampleAndUpdatePointArray</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Concat" />
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>PointArray</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:CombineLatest" />
                  </Expression>
                  <Expression xsi:type="Index" />
                  <Expression xsi:type="MemberSelector">
                    <Selector>Z</Selector>
                  </Expression>
                  <Expression xsi:type="Divide">
                    <Operand xsi:type="FloatProperty">
                      <Value>3</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="Subtract">
                    <Operand xsi:type="FloatProperty">
                      <Value>0</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>Step</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>Direction</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="num:Cos" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:CombineLatest" />
                  </Expression>
                  <Expression xsi:type="Multiply" />
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="num:Sin" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:CombineLatest" />
                  </Expression>
                  <Expression xsi:type="Multiply" />
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Zip" />
                  </Expression>
                  <Expression xsi:type="InputMapping">
                    <PropertyMappings>
                      <Property Name="X" Selector="it.Item1" />
                      <Property Name="Y" Selector="it.Item2" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="gl:CreateVector3">
                      <gl:X>-0.02031515</gl:X>
                      <gl:Y>0.002212393</gl:Y>
                      <gl:Z>0</gl:Z>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:WithLatestFrom" />
                  </Expression>
                  <Expression xsi:type="Add" />
                  <Expression xsi:type="SelectMany">
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>X</Selector>
                        </Expression>
                        <Expression xsi:type="scr:ExpressionTransform">
                          <scr:Expression>it &gt; 1 ? it - 2 : it &lt; -1 ? it + 2 : it</scr:Expression>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>Y</Selector>
                        </Expression>
                        <Expression xsi:type="scr:ExpressionTransform">
                          <scr:Expression>it &gt; 1 ? it - 2 : it &lt; -1 ? it + 2 : it</scr:Expression>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>Z</Selector>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Zip" />
                        </Expression>
                        <Expression xsi:type="InputMapping">
                          <PropertyMappings>
                            <Property Name="X" Selector="it.Item1" />
                            <Property Name="Y" Selector="it.Item2" />
                            <Property Name="Z" Selector="it.Item3" />
                          </PropertyMappings>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="gl:CreateVector3">
                            <gl:X>0.235533848</gl:X>
                            <gl:Y>0.8011729</gl:Y>
                            <gl:Z>6.457796</gl:Z>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="0" To="3" Label="Source1" />
                        <Edge From="0" To="5" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                        <Edge From="2" To="6" Label="Source1" />
                        <Edge From="3" To="4" Label="Source1" />
                        <Edge From="4" To="6" Label="Source2" />
                        <Edge From="5" To="6" Label="Source3" />
                        <Edge From="6" To="7" Label="Source1" />
                        <Edge From="7" To="8" Label="Source1" />
                        <Edge From="8" To="9" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:ToArray" />
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="4" Label="Source2" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="5" To="22" Label="Source1" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="6" To="7" Label="Source1" />
                  <Edge From="7" To="8" Label="Source1" />
                  <Edge From="8" To="14" Label="Source3" />
                  <Edge From="8" To="17" Label="Source3" />
                  <Edge From="9" To="10" Label="Source1" />
                  <Edge From="10" To="14" Label="Source1" />
                  <Edge From="10" To="17" Label="Source1" />
                  <Edge From="11" To="12" Label="Source1" />
                  <Edge From="12" To="13" Label="Source1" />
                  <Edge From="12" To="16" Label="Source1" />
                  <Edge From="13" To="14" Label="Source2" />
                  <Edge From="14" To="15" Label="Source1" />
                  <Edge From="15" To="19" Label="Source1" />
                  <Edge From="16" To="17" Label="Source2" />
                  <Edge From="17" To="18" Label="Source1" />
                  <Edge From="18" To="19" Label="Source2" />
                  <Edge From="19" To="20" Label="Source1" />
                  <Edge From="20" To="21" Label="Source1" />
                  <Edge From="21" To="22" Label="Source2" />
                  <Edge From="22" To="23" Label="Source1" />
                  <Edge From="23" To="24" Label="Source1" />
                  <Edge From="24" To="25" Label="Source1" />
                  <Edge From="25" To="26" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>RandomDistribution</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>NumIncoherent</Name>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Count" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p1:SampleArray">
                <p1:Count>275</p1:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>NumIncoherent</Name>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Count" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p1:SampleArray">
                <p1:Count>275</p1:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>NumIncoherent</Name>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Count" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p1:SampleArray">
                <p1:Count>275</p1:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="SelectMany">
              <Name>CreatePointArray</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Item1</Selector>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Concat" />
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Item2</Selector>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Concat" />
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Item3</Selector>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Concat" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="num:Abs" />
                  </Expression>
                  <Expression xsi:type="Multiply">
                    <Operand xsi:type="DoubleProperty">
                      <Value>20</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="Add">
                    <Operand xsi:type="DoubleProperty">
                      <Value>1</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Zip" />
                  </Expression>
                  <Expression xsi:type="InputMapping">
                    <PropertyMappings>
                      <Property Name="X" Selector="Item1" />
                      <Property Name="Y" Selector="Item2" />
                      <Property Name="Z" Selector="Item3" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="gl:CreateVector3">
                      <gl:X>0.4241305</gl:X>
                      <gl:Y>-0.0046047396</gl:Y>
                      <gl:Z>16.16208</gl:Z>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:ToArray" />
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="0" To="3" Label="Source1" />
                  <Edge From="0" To="5" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="10" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="10" Label="Source2" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="6" To="7" Label="Source1" />
                  <Edge From="7" To="8" Label="Source1" />
                  <Edge From="8" To="9" Label="Source1" />
                  <Edge From="9" To="10" Label="Source3" />
                  <Edge From="10" To="11" Label="Source1" />
                  <Edge From="11" To="12" Label="Source1" />
                  <Edge From="12" To="13" Label="Source1" />
                  <Edge From="13" To="14" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="dsp:Concat">
                <dsp:Axis>0</dsp:Axis>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
            <Expression xsi:type="MemberSelector">
              <Selector>Length</Selector>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Length</Selector>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="17" Label="Source1" />
            <Edge From="4" To="20" Label="Source1" />
            <Edge From="5" To="8" Label="Source1" />
            <Edge From="5" To="11" Label="Source1" />
            <Edge From="5" To="14" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="8" Label="Source2" />
            <Edge From="8" To="15" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="10" To="11" Label="Source2" />
            <Edge From="11" To="15" Label="Source2" />
            <Edge From="12" To="13" Label="Source1" />
            <Edge From="13" To="14" Label="Source2" />
            <Edge From="14" To="15" Label="Source3" />
            <Edge From="15" To="16" Label="Source1" />
            <Edge From="16" To="17" Label="Source2" />
            <Edge From="16" To="21" Label="Source1" />
            <Edge From="17" To="18" Label="Source1" />
            <Edge From="18" To="19" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="MulticastSubject">
        <Name>PointArray</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>RenderFrame</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>PointArray</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:WithLatestFrom" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Item2</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:DrawArrays">
          <gl:ShaderName>points</gl:ShaderName>
          <gl:DrawMode>Points</gl:DrawMode>
          <gl:Usage>DynamicDraw</gl:Usage>
          <gl:VertexAttributes>
            <gl:VertexAttributeMapping>
              <gl:Size>3</gl:Size>
              <gl:Normalized>false</gl:Normalized>
              <gl:Type>Float</gl:Type>
            </gl:VertexAttributeMapping>
          </gl:VertexAttributes>
        </Combinator>
      </Expression>
      <Expression xsi:type="GroupWorkflow">
        <Name>Shader</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:CreateWindow">
                <gl:Width>640</gl:Width>
                <gl:Height>480</gl:Height>
                <gl:VSync>On</gl:VSync>
                <gl:SwapSync>false</gl:SwapSync>
                <gl:ClearColor>Black</gl:ClearColor>
                <gl:ClearMask>DepthBufferBit ColorBufferBit</gl:ClearMask>
                <gl:CursorVisible>true</gl:CursorVisible>
                <gl:Location xsi:nil="true" />
                <gl:WindowBorder>Resizable</gl:WindowBorder>
                <gl:WindowState>Normal</gl:WindowState>
                <gl:DisplayDevice>Primary</gl:DisplayDevice>
                <gl:TargetRenderFrequency>100</gl:TargetRenderFrequency>
                <gl:TargetUpdateFrequency xsi:nil="true" />
                <gl:RenderState>
                  <gl:StateConfiguration xsi:type="gl:EnableState">
                    <gl:Capability>Blend</gl:Capability>
                  </gl:StateConfiguration>
                  <gl:StateConfiguration xsi:type="gl:BlendFunctionState">
                    <gl:SourceFactor>SrcAlpha</gl:SourceFactor>
                    <gl:DestinationFactor>OneMinusSrcAlpha</gl:DestinationFactor>
                  </gl:StateConfiguration>
                  <gl:StateConfiguration xsi:type="gl:EnableState">
                    <gl:Capability>PointSprite</gl:Capability>
                  </gl:StateConfiguration>
                  <gl:StateConfiguration xsi:type="gl:EnableState">
                    <gl:Capability>ProgramPointSize</gl:Capability>
                  </gl:StateConfiguration>
                  <gl:StateConfiguration xsi:type="gl:EnableState">
                    <gl:Capability>LineSmooth</gl:Capability>
                  </gl:StateConfiguration>
                </gl:RenderState>
                <gl:GraphicsMode>
                  <gl:ColorFormat>
                    <gl:Red>8</gl:Red>
                    <gl:Green>8</gl:Green>
                    <gl:Blue>8</gl:Blue>
                    <gl:Alpha>8</gl:Alpha>
                  </gl:ColorFormat>
                  <gl:Depth>16</gl:Depth>
                  <gl:Stencil>0</gl:Stencil>
                  <gl:Samples>0</gl:Samples>
                  <gl:AccumulatorFormat>
                    <gl:Red>0</gl:Red>
                    <gl:Green>0</gl:Green>
                    <gl:Blue>0</gl:Blue>
                    <gl:Alpha>0</gl:Alpha>
                  </gl:AccumulatorFormat>
                  <gl:Buffers>2</gl:Buffers>
                  <gl:Stereo>false</gl:Stereo>
                </gl:GraphicsMode>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:ShaderResources">
                <gl:Shaders>
                  <gl:ShaderConfiguration xsi:type="gl:Material">
                    <gl:Name>lines</gl:Name>
                    <gl:RenderState>
                      <gl:StateConfiguration xsi:type="gl:EnableState">
                        <gl:Capability>Blend</gl:Capability>
                      </gl:StateConfiguration>
                      <gl:StateConfiguration xsi:type="gl:BlendFunctionState">
                        <gl:SourceFactor>SrcAlpha</gl:SourceFactor>
                        <gl:DestinationFactor>OneMinusSrcAlpha</gl:DestinationFactor>
                      </gl:StateConfiguration>
                    </gl:RenderState>
                    <gl:ShaderUniforms>
                      <gl:UniformConfiguration xsi:type="gl:Vec4Uniform">
                        <gl:Name>color</gl:Name>
                        <gl:Value>
                          <gl:X>1</gl:X>
                          <gl:Y>0</gl:Y>
                          <gl:Z>0</gl:Z>
                          <gl:W>1</gl:W>
                        </gl:Value>
                      </gl:UniformConfiguration>
                    </gl:ShaderUniforms>
                    <gl:BufferBindings />
                    <gl:FramebufferAttachments />
                    <gl:VertexShader>lines.vert</gl:VertexShader>
                    <gl:FragmentShader>lines.frag</gl:FragmentShader>
                  </gl:ShaderConfiguration>
                  <gl:ShaderConfiguration xsi:type="gl:Material">
                    <gl:Name>points</gl:Name>
                    <gl:RenderState />
                    <gl:ShaderUniforms>
                      <gl:UniformConfiguration xsi:type="gl:Vec4Uniform">
                        <gl:Name>color</gl:Name>
                        <gl:Value>
                          <gl:X>1</gl:X>
                          <gl:Y>1</gl:Y>
                          <gl:Z>1</gl:Z>
                          <gl:W>1</gl:W>
                        </gl:Value>
                      </gl:UniformConfiguration>
                    </gl:ShaderUniforms>
                    <gl:BufferBindings />
                    <gl:FramebufferAttachments />
                    <gl:VertexShader>particles.vert</gl:VertexShader>
                    <gl:FragmentShader>particles.frag</gl:FragmentShader>
                    <gl:MeshName />
                  </gl:ShaderConfiguration>
                </gl:Shaders>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="res:LoadResources" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:UpdateFrame" />
            </Expression>
            <Expression xsi:type="PublishSubject">
              <Name>UpdateFrame</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:RenderFrame" />
            </Expression>
            <Expression xsi:type="PublishSubject">
              <Name>RenderFrame</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gli:MouseMove" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gli:NormalizedDeviceCoordinates" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:CreateVector2">
          <gl:X>0</gl:X>
          <gl:Y>0</gl:Y>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:WithLatestFrom" />
      </Expression>
      <Expression xsi:type="SelectMany">
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Expression>it.Item1</scr:Expression>
            </Expression>
            <Expression xsi:type="scr:ExpressionTransform">
              <scr:Expression>it.Item2</scr:Expression>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:ToArray" />
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="0" To="2" Label="Source1" />
            <Edge From="1" To="3" Label="Source1" />
            <Edge From="2" To="3" Label="Source2" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>RenderFrame</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:WithLatestFrom" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Item2</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:DrawArrays">
          <gl:ShaderName>lines</gl:ShaderName>
          <gl:DrawMode>Lines</gl:DrawMode>
          <gl:Usage>DynamicDraw</gl:Usage>
          <gl:VertexAttributes>
            <gl:VertexAttributeMapping>
              <gl:Size>2</gl:Size>
              <gl:Normalized>false</gl:Normalized>
              <gl:Type>Float</gl:Type>
            </gl:VertexAttributeMapping>
          </gl:VertexAttributes>
        </Combinator>
      </Expression>
      <Expression xsi:type="scr:ExpressionTransform">
        <scr:Expression>Math.Atan2(it.Y, it.X)</scr:Expression>
      </Expression>
      <Expression xsi:type="MulticastSubject">
        <Name>Direction</Name>
      </Expression>
      <Expression xsi:type="scr:ExpressionTransform">
        <scr:Expression>Math.Sqrt(Math.Pow(it.Y, 2) + Math.Pow(it.X, 2))</scr:Expression>
      </Expression>
      <Expression xsi:type="Divide">
        <Operand xsi:type="DoubleProperty">
          <Value>100</Value>
        </Operand>
      </Expression>
      <Expression xsi:type="MulticastSubject">
        <Name>Step</Name>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="8" To="9" Label="Source1" />
      <Edge From="10" To="11" Label="Source1" />
      <Edge From="12" To="13" Label="Source1" />
      <Edge From="13" To="14" Label="Source1" />
      <Edge From="15" To="17" Label="Source1" />
      <Edge From="16" To="17" Label="Source2" />
      <Edge From="17" To="18" Label="Source1" />
      <Edge From="18" To="19" Label="Source1" />
      <Edge From="20" To="22" Label="Source1" />
      <Edge From="21" To="22" Label="Source2" />
      <Edge From="22" To="23" Label="Source1" />
      <Edge From="23" To="24" Label="Source1" />
      <Edge From="26" To="27" Label="Source1" />
      <Edge From="27" To="28" Label="Source1" />
      <Edge From="28" To="29" Label="Source1" />
      <Edge From="29" To="30" Label="Source1" />
      <Edge From="31" To="33" Label="Source1" />
      <Edge From="32" To="33" Label="Source2" />
      <Edge From="33" To="34" Label="Source1" />
      <Edge From="34" To="35" Label="Source1" />
      <Edge From="37" To="38" Label="Source1" />
      <Edge From="38" To="40" Label="Source1" />
      <Edge From="38" To="46" Label="Source1" />
      <Edge From="38" To="48" Label="Source1" />
      <Edge From="39" To="40" Label="Source2" />
      <Edge From="40" To="41" Label="Source1" />
      <Edge From="41" To="43" Label="Source2" />
      <Edge From="42" To="43" Label="Source1" />
      <Edge From="43" To="44" Label="Source1" />
      <Edge From="44" To="45" Label="Source1" />
      <Edge From="46" To="47" Label="Source1" />
      <Edge From="48" To="49" Label="Source1" />
      <Edge From="49" To="50" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>