<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.6.2"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:gl="clr-namespace:Bonsai.Shaders;assembly=Bonsai.Shaders"
                 xmlns:res="clr-namespace:Bonsai.Resources;assembly=Bonsai.System"
                 xmlns:num="clr-namespace:Bonsai.Numerics;assembly=Bonsai.Numerics"
                 xmlns:p1="clr-namespace:Bonsai.Numerics.Distributions;assembly=Bonsai.Numerics"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:bz="clr-namespace:BonZeb;assembly=BonZeb"
                 xmlns:scr="clr-namespace:Bonsai.Scripting;assembly=Bonsai.Scripting"
                 xmlns:p2="clr-namespace:OpenTK;assembly=OpenTK"
                 xmlns:dsp="clr-namespace:Bonsai.Dsp;assembly=Bonsai.Dsp"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:CreateWindow">
          <gl:Width>640</gl:Width>
          <gl:Height>480</gl:Height>
          <gl:VSync>On</gl:VSync>
          <gl:SwapSync>false</gl:SwapSync>
          <gl:ClearColor>Black</gl:ClearColor>
          <gl:ClearMask>DepthBufferBit ColorBufferBit</gl:ClearMask>
          <gl:CursorVisible>true</gl:CursorVisible>
          <gl:Location xsi:nil="true" />
          <gl:WindowBorder>Resizable</gl:WindowBorder>
          <gl:WindowState>Normal</gl:WindowState>
          <gl:DisplayDevice>Primary</gl:DisplayDevice>
          <gl:TargetRenderFrequency>100</gl:TargetRenderFrequency>
          <gl:TargetUpdateFrequency xsi:nil="true" />
          <gl:RenderState>
            <gl:StateConfiguration xsi:type="gl:EnableState">
              <gl:Capability>Blend</gl:Capability>
            </gl:StateConfiguration>
            <gl:StateConfiguration xsi:type="gl:BlendFunctionState">
              <gl:SourceFactor>SrcAlpha</gl:SourceFactor>
              <gl:DestinationFactor>OneMinusSrcAlpha</gl:DestinationFactor>
            </gl:StateConfiguration>
            <gl:StateConfiguration xsi:type="gl:EnableState">
              <gl:Capability>PointSprite</gl:Capability>
            </gl:StateConfiguration>
            <gl:StateConfiguration xsi:type="gl:EnableState">
              <gl:Capability>ProgramPointSize</gl:Capability>
            </gl:StateConfiguration>
          </gl:RenderState>
          <gl:GraphicsMode>
            <gl:ColorFormat>
              <gl:Red>8</gl:Red>
              <gl:Green>8</gl:Green>
              <gl:Blue>8</gl:Blue>
              <gl:Alpha>8</gl:Alpha>
            </gl:ColorFormat>
            <gl:Depth>16</gl:Depth>
            <gl:Stencil>0</gl:Stencil>
            <gl:Samples>0</gl:Samples>
            <gl:AccumulatorFormat>
              <gl:Red>0</gl:Red>
              <gl:Green>0</gl:Green>
              <gl:Blue>0</gl:Blue>
              <gl:Alpha>0</gl:Alpha>
            </gl:AccumulatorFormat>
            <gl:Buffers>2</gl:Buffers>
            <gl:Stereo>false</gl:Stereo>
          </gl:GraphicsMode>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:ShaderResources">
          <gl:Shaders>
            <gl:ShaderConfiguration xsi:type="gl:Material">
              <gl:Name>shader</gl:Name>
              <gl:RenderState />
              <gl:ShaderUniforms>
                <gl:UniformConfiguration xsi:type="gl:Vec4Uniform">
                  <gl:Name>color</gl:Name>
                  <gl:Value>
                    <gl:X>1</gl:X>
                    <gl:Y>1</gl:Y>
                    <gl:Z>1</gl:Z>
                    <gl:W>1</gl:W>
                  </gl:Value>
                </gl:UniformConfiguration>
              </gl:ShaderUniforms>
              <gl:BufferBindings />
              <gl:FramebufferAttachments />
              <gl:VertexShader>particles.vert</gl:VertexShader>
              <gl:FragmentShader>particles.frag</gl:FragmentShader>
              <gl:MeshName />
            </gl:ShaderConfiguration>
          </gl:Shaders>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="res:LoadResources" />
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="num:CreateRandom">
          <num:Seed xsi:nil="true" />
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="p1:CreateContinuousUniform">
          <p1:Lower>-1</p1:Lower>
          <p1:Upper>1</p1:Upper>
        </Combinator>
      </Expression>
      <Expression xsi:type="BehaviorSubject">
        <Name>RandomDistribution</Name>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="gl:UpdateFrame" />
        </Builder>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:RenderFrame" />
      </Expression>
      <Expression xsi:type="PublishSubject">
        <Name>Update</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="IntProperty">
          <Value>550</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="BehaviorSubject">
        <Name>NumPoints</Name>
      </Expression>
      <Expression xsi:type="SelectMany">
        <Name>GetRandomDistribution</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>RandomDistribution</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>NumPoints</Name>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Count" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p1:SampleArray">
                <p1:Count>550</p1:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>NumPoints</Name>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Count" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p1:SampleArray">
                <p1:Count>550</p1:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>NumPoints</Name>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Count" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p1:SampleArray">
                <p1:Count>550</p1:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="3" Label="Source1" />
            <Edge From="0" To="6" Label="Source1" />
            <Edge From="0" To="9" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source2" />
            <Edge From="3" To="10" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source2" />
            <Edge From="6" To="10" Label="Source2" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="9" Label="Source2" />
            <Edge From="9" To="10" Label="Source3" />
            <Edge From="10" To="11" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="SelectMany">
        <Name>CreatePointArray</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Item1</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Concat" />
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Item2</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Concat" />
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Item3</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Concat" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="num:Abs" />
            </Expression>
            <Expression xsi:type="Multiply">
              <Operand xsi:type="DoubleProperty">
                <Value>20</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="Add">
              <Operand xsi:type="DoubleProperty">
                <Value>1</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="InputMapping">
              <PropertyMappings>
                <Property Name="X" Selector="Item1" />
                <Property Name="Y" Selector="Item2" />
                <Property Name="Z" Selector="Item3" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="gl:CreateVector3">
                <gl:X>0.3457664</gl:X>
                <gl:Y>0.7205523</gl:Y>
                <gl:Z>9.088941</gl:Z>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:ToArray" />
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="0" To="3" Label="Source1" />
            <Edge From="0" To="5" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="10" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="10" Label="Source2" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="10" Label="Source3" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="11" To="12" Label="Source1" />
            <Edge From="12" To="13" Label="Source1" />
            <Edge From="13" To="14" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="MulticastSubject">
        <Name>PointArray</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="FloatProperty">
          <Value>0.8</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="BehaviorSubject">
        <Name>ProportionCoherent</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="FloatProperty">
          <Value>0.01</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="BehaviorSubject">
        <Name>Step</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="FloatProperty">
          <Value>45</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="bz:ConvertDegreesToRadians" />
      </Expression>
      <Expression xsi:type="BehaviorSubject">
        <Name>Direction</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>NumPoints</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>ProportionCoherent</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:CombineLatest" />
      </Expression>
      <Expression xsi:type="scr:ExpressionTransform">
        <scr:Expression>it.Item2 &gt; 0 ? Convert.ToInt32(Math.Round(it.Item1*(it.Item2))) : 0</scr:Expression>
      </Expression>
      <Expression xsi:type="BehaviorSubject">
        <Name>NumCoherent</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>NumPoints</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>ProportionCoherent</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:CombineLatest" />
      </Expression>
      <Expression xsi:type="scr:ExpressionTransform">
        <scr:Expression>it.Item2 &lt; 1 ? Convert.ToInt32(Math.Round(it.Item1*(1 - it.Item2))) : 0</scr:Expression>
      </Expression>
      <Expression xsi:type="BehaviorSubject">
        <Name>NumIncoherent</Name>
      </Expression>
      <Expression xsi:type="BehaviorSubject" TypeArguments="p2:Vector3[]">
        <Name>PointArray</Name>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="SubscribeSubject">
          <Name>Update</Name>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="rx:Take">
            <rx:Count>1</rx:Count>
          </Combinator>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="SelectMany">
          <Name>GetRandomDistribution</Name>
          <Workflow>
            <Nodes>
              <Expression xsi:type="SubscribeSubject">
                <Name>RandomDistribution</Name>
              </Expression>
              <Expression xsi:type="SubscribeSubject">
                <Name>NumPoints</Name>
              </Expression>
              <Expression xsi:type="PropertyMapping">
                <PropertyMappings>
                  <Property Name="Count" />
                </PropertyMappings>
              </Expression>
              <Expression xsi:type="Combinator">
                <Combinator xsi:type="p1:SampleArray">
                  <p1:Count>200</p1:Count>
                </Combinator>
              </Expression>
              <Expression xsi:type="SubscribeSubject">
                <Name>NumPoints</Name>
              </Expression>
              <Expression xsi:type="PropertyMapping">
                <PropertyMappings>
                  <Property Name="Count" />
                </PropertyMappings>
              </Expression>
              <Expression xsi:type="Combinator">
                <Combinator xsi:type="p1:SampleArray">
                  <p1:Count>200</p1:Count>
                </Combinator>
              </Expression>
              <Expression xsi:type="SubscribeSubject">
                <Name>NumPoints</Name>
              </Expression>
              <Expression xsi:type="PropertyMapping">
                <PropertyMappings>
                  <Property Name="Count" />
                </PropertyMappings>
              </Expression>
              <Expression xsi:type="Combinator">
                <Combinator xsi:type="p1:SampleArray">
                  <p1:Count>200</p1:Count>
                </Combinator>
              </Expression>
              <Expression xsi:type="Combinator">
                <Combinator xsi:type="rx:Zip" />
              </Expression>
              <Expression xsi:type="WorkflowOutput" />
            </Nodes>
            <Edges>
              <Edge From="0" To="3" Label="Source1" />
              <Edge From="0" To="6" Label="Source1" />
              <Edge From="0" To="9" Label="Source1" />
              <Edge From="1" To="2" Label="Source1" />
              <Edge From="2" To="3" Label="Source2" />
              <Edge From="3" To="10" Label="Source1" />
              <Edge From="4" To="5" Label="Source1" />
              <Edge From="5" To="6" Label="Source2" />
              <Edge From="6" To="10" Label="Source2" />
              <Edge From="7" To="8" Label="Source1" />
              <Edge From="8" To="9" Label="Source2" />
              <Edge From="9" To="10" Label="Source3" />
              <Edge From="10" To="11" Label="Source1" />
            </Edges>
          </Workflow>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="SelectMany">
          <Name>CreatePointArray</Name>
          <Workflow>
            <Nodes>
              <Expression xsi:type="WorkflowInput">
                <Name>Source1</Name>
              </Expression>
              <Expression xsi:type="MemberSelector">
                <Selector>Item1</Selector>
              </Expression>
              <Expression xsi:type="Combinator">
                <Combinator xsi:type="rx:Concat" />
              </Expression>
              <Expression xsi:type="MemberSelector">
                <Selector>Item2</Selector>
              </Expression>
              <Expression xsi:type="Combinator">
                <Combinator xsi:type="rx:Concat" />
              </Expression>
              <Expression xsi:type="MemberSelector">
                <Selector>Item3</Selector>
              </Expression>
              <Expression xsi:type="Combinator">
                <Combinator xsi:type="rx:Concat" />
              </Expression>
              <Expression xsi:type="Combinator">
                <Combinator xsi:type="num:Abs" />
              </Expression>
              <Expression xsi:type="Multiply">
                <Operand xsi:type="DoubleProperty">
                  <Value>10</Value>
                </Operand>
              </Expression>
              <Expression xsi:type="Add">
                <Operand xsi:type="DoubleProperty">
                  <Value>3</Value>
                </Operand>
              </Expression>
              <Expression xsi:type="Combinator">
                <Combinator xsi:type="rx:Zip" />
              </Expression>
              <Expression xsi:type="InputMapping">
                <PropertyMappings>
                  <Property Name="X" Selector="Item1" />
                  <Property Name="Y" Selector="Item2" />
                  <Property Name="Z" Selector="Item3" />
                </PropertyMappings>
              </Expression>
              <Expression xsi:type="Combinator">
                <Combinator xsi:type="gl:CreateVector3">
                  <gl:X>0.6608686</gl:X>
                  <gl:Y>0.477275521</gl:Y>
                  <gl:Z>12.3623734</gl:Z>
                </Combinator>
              </Expression>
              <Expression xsi:type="Combinator">
                <Combinator xsi:type="rx:ToArray" />
              </Expression>
              <Expression xsi:type="WorkflowOutput" />
            </Nodes>
            <Edges>
              <Edge From="0" To="1" Label="Source1" />
              <Edge From="0" To="3" Label="Source1" />
              <Edge From="0" To="5" Label="Source1" />
              <Edge From="1" To="2" Label="Source1" />
              <Edge From="2" To="10" Label="Source1" />
              <Edge From="3" To="4" Label="Source1" />
              <Edge From="4" To="10" Label="Source2" />
              <Edge From="5" To="6" Label="Source1" />
              <Edge From="6" To="7" Label="Source1" />
              <Edge From="7" To="8" Label="Source1" />
              <Edge From="8" To="9" Label="Source1" />
              <Edge From="9" To="10" Label="Source3" />
              <Edge From="10" To="11" Label="Source1" />
              <Edge From="11" To="12" Label="Source1" />
              <Edge From="12" To="13" Label="Source1" />
              <Edge From="13" To="14" Label="Source1" />
            </Edges>
          </Workflow>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="MulticastSubject">
          <Name>PointArray</Name>
        </Builder>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Update</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Skip">
          <rx:Count>1</rx:Count>
        </Combinator>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="rx:ElementCountWindow">
            <rx:Count>1</rx:Count>
            <rx:Skip>10</rx:Skip>
          </Combinator>
        </Builder>
      </Expression>
      <Expression xsi:type="SelectMany">
        <Name>UpdatePointArray</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>NumPoints</Name>
            </Expression>
            <Expression xsi:type="SelectMany">
              <Name>CreateArray</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="Count" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Range">
                      <rx:Start>0</rx:Start>
                      <rx:Count>550</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:ToArray" />
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="num:SelectPermutation" />
            </Expression>
            <Expression xsi:type="SelectMany">
              <Name>SampleArray</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>NumCoherent</Name>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="Count" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Range">
                      <rx:Start>0</rx:Start>
                      <rx:Count>440</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:CombineLatest" />
                  </Expression>
                  <Expression xsi:type="Index" />
                  <Expression xsi:type="SelectMany">
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:ToArray" />
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="4" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source2" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="6" To="7" Label="Source1" />
                  <Edge From="7" To="8" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="SelectMany">
              <Name>SampleAndUpdatePointArray</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Concat" />
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>PointArray</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:CombineLatest" />
                  </Expression>
                  <Expression xsi:type="Index" />
                  <Expression xsi:type="MemberSelector">
                    <Selector>Z</Selector>
                  </Expression>
                  <Expression xsi:type="Divide">
                    <Operand xsi:type="FloatProperty">
                      <Value>3</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="Subtract">
                    <Operand xsi:type="FloatProperty">
                      <Value>0</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>Step</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>Direction</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="num:Cos" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:CombineLatest" />
                  </Expression>
                  <Expression xsi:type="Multiply" />
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="num:Sin" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:CombineLatest" />
                  </Expression>
                  <Expression xsi:type="Multiply" />
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Zip" />
                  </Expression>
                  <Expression xsi:type="InputMapping">
                    <PropertyMappings>
                      <Property Name="X" Selector="it.Item1" />
                      <Property Name="Y" Selector="it.Item2" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="gl:CreateVector3">
                      <gl:X>0.0170888565</gl:X>
                      <gl:Y>0.0170888565</gl:Y>
                      <gl:Z>0</gl:Z>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:WithLatestFrom" />
                  </Expression>
                  <Expression xsi:type="Add" />
                  <Expression xsi:type="SelectMany">
                    <Workflow>
                      <Nodes>
                        <Expression xsi:type="WorkflowInput">
                          <Name>Source1</Name>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>X</Selector>
                        </Expression>
                        <Expression xsi:type="scr:ExpressionTransform">
                          <scr:Expression>it &gt; 1 ? it - 2 : it &lt; -1 ? it + 2 : it</scr:Expression>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>Y</Selector>
                        </Expression>
                        <Expression xsi:type="scr:ExpressionTransform">
                          <scr:Expression>it &gt; 1 ? it - 2 : it &lt; -1 ? it + 2 : it</scr:Expression>
                        </Expression>
                        <Expression xsi:type="MemberSelector">
                          <Selector>Z</Selector>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="rx:Zip" />
                        </Expression>
                        <Expression xsi:type="InputMapping">
                          <PropertyMappings>
                            <Property Name="X" Selector="it.Item1" />
                            <Property Name="Y" Selector="it.Item2" />
                            <Property Name="Z" Selector="it.Item3" />
                          </PropertyMappings>
                        </Expression>
                        <Expression xsi:type="Combinator">
                          <Combinator xsi:type="gl:CreateVector3">
                            <gl:X>-0.49395588</gl:X>
                            <gl:Y>0.07855381</gl:Y>
                            <gl:Z>7.25018835</gl:Z>
                          </Combinator>
                        </Expression>
                        <Expression xsi:type="WorkflowOutput" />
                      </Nodes>
                      <Edges>
                        <Edge From="0" To="1" Label="Source1" />
                        <Edge From="0" To="3" Label="Source1" />
                        <Edge From="0" To="5" Label="Source1" />
                        <Edge From="1" To="2" Label="Source1" />
                        <Edge From="2" To="6" Label="Source1" />
                        <Edge From="3" To="4" Label="Source1" />
                        <Edge From="4" To="6" Label="Source2" />
                        <Edge From="5" To="6" Label="Source3" />
                        <Edge From="6" To="7" Label="Source1" />
                        <Edge From="7" To="8" Label="Source1" />
                        <Edge From="8" To="9" Label="Source1" />
                      </Edges>
                    </Workflow>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:ToArray" />
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="4" Label="Source2" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="5" Label="Source1" />
                  <Edge From="5" To="22" Label="Source1" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="6" To="7" Label="Source1" />
                  <Edge From="7" To="8" Label="Source1" />
                  <Edge From="8" To="14" Label="Source3" />
                  <Edge From="8" To="17" Label="Source3" />
                  <Edge From="9" To="10" Label="Source1" />
                  <Edge From="10" To="14" Label="Source1" />
                  <Edge From="10" To="17" Label="Source1" />
                  <Edge From="11" To="12" Label="Source1" />
                  <Edge From="12" To="13" Label="Source1" />
                  <Edge From="12" To="16" Label="Source1" />
                  <Edge From="13" To="14" Label="Source2" />
                  <Edge From="14" To="15" Label="Source1" />
                  <Edge From="15" To="19" Label="Source1" />
                  <Edge From="16" To="17" Label="Source2" />
                  <Edge From="17" To="18" Label="Source1" />
                  <Edge From="18" To="19" Label="Source2" />
                  <Edge From="19" To="20" Label="Source1" />
                  <Edge From="20" To="21" Label="Source1" />
                  <Edge From="21" To="22" Label="Source2" />
                  <Edge From="22" To="23" Label="Source1" />
                  <Edge From="23" To="24" Label="Source1" />
                  <Edge From="24" To="25" Label="Source1" />
                  <Edge From="25" To="26" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>RandomDistribution</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>NumIncoherent</Name>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Count" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p1:SampleArray">
                <p1:Count>110</p1:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>NumIncoherent</Name>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Count" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p1:SampleArray">
                <p1:Count>110</p1:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>NumIncoherent</Name>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Count" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="p1:SampleArray">
                <p1:Count>110</p1:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="SelectMany">
              <Name>CreatePointArray</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Item1</Selector>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Concat" />
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Item2</Selector>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Concat" />
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Item3</Selector>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Concat" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="num:Abs" />
                  </Expression>
                  <Expression xsi:type="Multiply">
                    <Operand xsi:type="DoubleProperty">
                      <Value>20</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="Add">
                    <Operand xsi:type="DoubleProperty">
                      <Value>1</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Zip" />
                  </Expression>
                  <Expression xsi:type="InputMapping">
                    <PropertyMappings>
                      <Property Name="X" Selector="Item1" />
                      <Property Name="Y" Selector="Item2" />
                      <Property Name="Z" Selector="Item3" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="gl:CreateVector3">
                      <gl:X>-0.7226864</gl:X>
                      <gl:Y>0.7531807</gl:Y>
                      <gl:Z>3.38056922</gl:Z>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:ToArray" />
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="0" To="3" Label="Source1" />
                  <Edge From="0" To="5" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="10" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="10" Label="Source2" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="6" To="7" Label="Source1" />
                  <Edge From="7" To="8" Label="Source1" />
                  <Edge From="8" To="9" Label="Source1" />
                  <Edge From="9" To="10" Label="Source3" />
                  <Edge From="10" To="11" Label="Source1" />
                  <Edge From="11" To="12" Label="Source1" />
                  <Edge From="12" To="13" Label="Source1" />
                  <Edge From="13" To="14" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="dsp:Concat">
                <dsp:Axis>0</dsp:Axis>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
            <Expression xsi:type="MemberSelector">
              <Selector>Length</Selector>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Length</Selector>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="17" Label="Source1" />
            <Edge From="4" To="20" Label="Source1" />
            <Edge From="5" To="8" Label="Source1" />
            <Edge From="5" To="11" Label="Source1" />
            <Edge From="5" To="14" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="8" Label="Source2" />
            <Edge From="8" To="15" Label="Source1" />
            <Edge From="9" To="10" Label="Source1" />
            <Edge From="10" To="11" Label="Source2" />
            <Edge From="11" To="15" Label="Source2" />
            <Edge From="12" To="13" Label="Source1" />
            <Edge From="13" To="14" Label="Source2" />
            <Edge From="14" To="15" Label="Source3" />
            <Edge From="15" To="16" Label="Source1" />
            <Edge From="16" To="17" Label="Source2" />
            <Edge From="16" To="21" Label="Source1" />
            <Edge From="17" To="18" Label="Source1" />
            <Edge From="18" To="19" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="MulticastSubject">
        <Name>PointArray</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>Update</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>PointArray</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:WithLatestFrom" />
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Item2</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="gl:DrawArrays">
          <gl:ShaderName>shader</gl:ShaderName>
          <gl:DrawMode>Points</gl:DrawMode>
          <gl:Usage>DynamicDraw</gl:Usage>
          <gl:VertexAttributes>
            <gl:VertexAttributeMapping>
              <gl:Size>3</gl:Size>
              <gl:Normalized>false</gl:Normalized>
              <gl:Type>Float</gl:Type>
            </gl:VertexAttributeMapping>
          </gl:VertexAttributes>
        </Combinator>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="Combinator">
          <Combinator xsi:type="IntProperty">
            <Value>100</Value>
          </Combinator>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="PropertyMapping">
          <PropertyMappings>
            <Property Name="i&lt;" />
          </PropertyMappings>
        </Builder>
      </Expression>
      <Expression xsi:type="Disable">
        <Builder xsi:type="IncludeWorkflow" Path="Extensions\ForLoop.bonsai">
          <i_x003D_>0</i_x003D_>
          <i_x003C_>100</i_x003C_>
          <i_x002B__x003D_>10</i_x002B__x003D_>
        </Builder>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="6" To="8" Label="Source1" />
      <Edge From="7" To="8" Label="Source2" />
      <Edge From="9" To="10" Label="Source1" />
      <Edge From="10" To="11" Label="Source1" />
      <Edge From="11" To="12" Label="Source1" />
      <Edge From="12" To="13" Label="Source1" />
      <Edge From="14" To="15" Label="Source1" />
      <Edge From="16" To="17" Label="Source1" />
      <Edge From="18" To="19" Label="Source1" />
      <Edge From="19" To="20" Label="Source1" />
      <Edge From="21" To="23" Label="Source1" />
      <Edge From="22" To="23" Label="Source2" />
      <Edge From="23" To="24" Label="Source1" />
      <Edge From="24" To="25" Label="Source1" />
      <Edge From="26" To="28" Label="Source1" />
      <Edge From="27" To="28" Label="Source2" />
      <Edge From="28" To="29" Label="Source1" />
      <Edge From="29" To="30" Label="Source1" />
      <Edge From="32" To="33" Label="Source1" />
      <Edge From="33" To="34" Label="Source1" />
      <Edge From="34" To="35" Label="Source1" />
      <Edge From="35" To="36" Label="Source1" />
      <Edge From="37" To="38" Label="Source1" />
      <Edge From="38" To="39" Label="Source1" />
      <Edge From="39" To="40" Label="Source1" />
      <Edge From="40" To="41" Label="Source1" />
      <Edge From="42" To="44" Label="Source1" />
      <Edge From="43" To="44" Label="Source2" />
      <Edge From="44" To="45" Label="Source1" />
      <Edge From="45" To="46" Label="Source1" />
      <Edge From="47" To="48" Label="Source1" />
      <Edge From="48" To="49" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>